20150919_160446 No log in
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;96 Well Microplate;sample1
7,0;96 Well DeepWell;reaction1
7,1;96 Well DeepWell;PCRPlate
13,0;DiTi 200ul LiHa;Labware1
13,1;DiTi 50ul LiHa;Labware4
13,2;DiTi Waste;Labware3
20,0;Trough 100ml;reagents1
20,1;Trough 100ml;reagents2
20,2;Trough 100ml;reagents3
21,0;Trough 100ml;reagents4
21,1;Trough 100ml;waste1
21,2;Trough 100ml;waste2
22,0;Trough 100ml;PCRMixTube
25,0;Wash Station Cleaner shallow
25,1;Wash Station Waste
25,2;Wash Station Cleaner deep
1;System
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--{ RPG }--
BeginLoop("10","EndlessPooling");
Execute("C:\barcodeGuard\Guarder.exe",0,"",2);
Execute("C:\notifier\Notifier.exe waitSetting",2,"",2);
ImportVariable(gridCount,"D:\projects\errorCheck\BarcodeGuard\Guarder\bin\Release\Grids\gridsCount.txt",0,"0",0,1,0,1,0);
BeginLoop("gridCount","scanBarcodes");
Comment("retry");
Group("POSID");
ImportVariable(grid2Scan,"D:\projects\errorCheck\BarcodeGuard\Guarder\bin\Release\Grids\~LOOP_scanBarcodes~.txt",0,"0",0,1,0,1,0);
If("grid2Scan",0,"0","scan finish");
IfThen("grid2Scan",0,"5");
Comment("write POSID scan command for grid 5 here");
Else();
EndIf();
IfThen("grid2Scan",0,"6");
Comment("write POSID scan command for grid 6  here");
Else();
EndIf();
Comment("write all other possible grids' posid command here");
GroupEnd();
Execute("C:\notifier\Notifier.exe ~LOOP_scanBarcodes~",2,"",2);
ImportVariable(result,"C:\barcodeGuard\result.txt",1,"False",0,1,0,1,0);
ImportVariable(retryOrIgnore,"C:\barcodeGuard\retryOrIgnore.txt",1,"Retry",0,1,0,1,0);
If("result",0,"True","thisGridFinishes");
If("result",0,"False","retry");
Comment("thisGridFinishes");
EndLoop();
Comment("ask for confirm");
Comment("pooling");
EndLoop();
